OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  alpha
Comment
  theta
Comment
  beta

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Channel Selector => #2
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
Input stream=#2 -> CSV File Writer
  Filename = C:/Users/Lab Guest/Desktop/Rise/GTec_Data/Data/
  Precision = 10
  Append data = false
  Only last matrix = false
#1 -> Channel Selector "1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16" => #4
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 14
  Band Pass Ripple (dB) = 0.5
Input stream=#5, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = C:/Users/Lab Guest/Desktop/Rise/GTec_Data/Data/
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#5, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
Input stream=#8, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = C:/Users/Lab Guest/Desktop/Rise/GTec_Data/Data/
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#8, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal Filter => #11
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 14
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
Input stream=#11, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = C:/Users/Lab Guest/Desktop/Rise/GTec_Data/Data/
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#11, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
